CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "Probabilities")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_apoptosis(?P<Plate>[0-9]{1})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern ‘TIF’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI - DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:caspase3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3")
    Name to assign these images:EDU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using All images, the Regular method and a small median filter.']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
    Select the input image:DNA
    Name the output image:IllumDNApolynomial
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumDNA50
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DNA
    Name the output image:IllumDNA100
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:DNA
    Name the output image:IllumDNA150
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DNA
    Name the output image:IllumDNA200
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:EDU
    Name the output image:IllumEDUpolynomial
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:EDU
    Name the output image:IllumEDU50
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:EDU
    Name the output image:IllumEDU100
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:EDU
    Name the output image:IllumEDU150
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:14|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
    Select the input image:EDU
    Name the output image:IllumEDU200
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldpolynomial
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:16|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfield50
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:17|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfield100
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfield150
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:19|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfield200
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:20|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3polynomial
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:21|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
    Select the input image:caspase3
    Name the output image:Illumcaspase350
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:22|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3100
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:23|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3150
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:24|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3200
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:25|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notes:['You can save the final illumination function to a file for later use in an analysis pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumDNApolynomial
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_polynomial
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA50
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_50
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA100
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_100
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA150
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_150
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA200
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_200
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUpolynomial
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_polynomial
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:IllumEDU50
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_50
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:IllumEDU100
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_100
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:IllumEDU150
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_150
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:IllumEDU200
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_200
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3polynomial
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_polynomial
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase350
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_50
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3100
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_100
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3150
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_150
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3200
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_200
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldpolynomial
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_polynomial
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfield50
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_50
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfield100
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_100
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfield150
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_150
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfield200
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_200
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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